---
API: 2.1
OpenSesame: 3.3.5
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "Simple RT Task"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background black

define sampler auditory_tone
	set volume 1
	set stop_after 0
	set sample "tone_500.wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define loop block_loop
	set source table
	set repeat 3
	set order random
	set description "Repeatedly runs another item"
	set cycles 4
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 auditory_tone yes
	setcycle 0 correct_response spacebar
	setcycle 0 stim_position 0
	setcycle 0 stim_shape circle
	setcycle 0 trial_type go
	setcycle 1 auditory_tone no
	setcycle 1 correct_response spacebar
	setcycle 1 stim_position 0
	setcycle 1 stim_shape circle
	setcycle 1 trial_type go
	setcycle 2 auditory_tone yes
	setcycle 2 correct_response none
	setcycle 2 stim_position 0
	setcycle 2 stim_shape square
	setcycle 2 trial_type nogo
	setcycle 3 auditory_tone no
	setcycle 3 correct_response none
	setcycle 3 stim_position 0
	setcycle 3 stim_shape square
	setcycle 3 trial_type nogo
	run trial_sequence

define sequence block_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run block_loop always

define sequence block_sequence_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run block_loop always

define form_text_display end_of_experiment
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Title
	__form_text__
	You have reached the end of the experiment.experiment
	Thank you!
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display end_of_practice
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "End of Practice"
	__form_text__
	This is the end of the practice. The experiment will now begin.
	Please click 'Ok' when you are ready to continue.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run instructions always
	run practice_loop always
	run end_of_practice always
	run experimental_loop always
	run end_of_experiment always

define loop experimental_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run block_sequence_1

define sketchpad fixation_cross
	set duration 595
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define form_text_display instructions
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Instructions
	__form_text__
	Hello! please read these instructions carefully before starting the experiment. 
	Your task is to press the spacebar as quickly as possible when you hear the word 'circle', or see a circle appear on the screen. Do not respond to squares.
	Sometimes, you will hear a beep play. Please ignore this beep and follow the instructions above. 
	You will get to practice task before starting properly. Please click 'Ok' when you are ready to begin your practice.
	Thank you!
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define keyboard_response keyboard_response
	set timeout 795
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses spacebar

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define loop practice_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 0
	set continuous no
	set break_if_on_first yes
	set break_if never
	run block_sequence

define sketchpad target_circle
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="circle_RT.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad target_square
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="square_RT.png" scale=1 show_if=always x=0 y=0 z_index=0

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation_cross always
	run target_circle always
	run target_square always
	run keyboard_response always
	run auditory_tone "[auditory_tone] = yes"
	run logger always

