---
API: 2.1
OpenSesame: 3.2.8b1
Platform: posix
---
set width 1920
set uniform_coordinates yes
set title IAPN
set subject_parity even
set subject_nr 0
set start main
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 1080
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/home/experimenter/IAPN"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background black

define sketchpad EHI_intro
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Now you'll see a series of questions<br />where you will be asked to indicate your preferred hand to use during specific tasks." x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="Press SPACE to start" x=0 y=256 z_index=0

define logger EHI_logger
	set description "Logs experimental data"
	set auto_log no
	log subject_nr
	log EHI_writing
	log EHI_spoon
	log EHI_throwing
	log EHI_toothbrush

define loop EHI_loop
	set source_file "EHI_shortformQs.csv"
	set source file
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run EHI_sequence

define sequence EHI_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run EHI_intro always
	run EHI_shortform always

define inline_script EHI_shortform
	set description "Executes Python code"
	___run__
	# create form
	EHIshort = Form(
					cols = [1,1,1], 
					rows = [1,1,1,1,1,1]
					)	
	# defining questions
	labelTitle = Label(text=u'Please indicated preferred hand to use whilst:')
	EHI_writing = Label(text=u'Writing')
	EHI_throwing = Label(text=u'Throwing a ball')
	EHI_toothbrush = Label(text=u'Using a toothbrush')
	EHI_spoon = Label(text=u'Using a spoon')
	
	# defining responses
	writingScale = RatingScale(
					var = u'EHI_writing',
					nodes = [u'Left',u'Mostly left',u'Both equally',u'Mostly right', u'Right']
					)
	throwingScale = RatingScale(
					var = u'EHI_throwing',
					nodes = [u'Left',u'Mostly left',u'Both equally',u'Mostly right', u'Right']
					)
	toothbrushScale = RatingScale(
					var = u'EHI_toothbrush',
					nodes = [u'Left',u'Mostly left',u'Both equally',u'Mostly right', u'Right']
					)				
	spoonScale = RatingScale(
					var = u'EHI_spoon',
					nodes = [u'Left',u'Mostly left',u'Both equally',u'Mostly right', u'Right']
					)
	
					
	nextButton = Button(text = u'Next')
	
	# actual form
	#adding widgits (defined in 'prepare') to form
	EHIshort.set_widget(labelTitle, (0,0), colspan = 2)
	# writing Q
	EHIshort.set_widget(EHI_writing, (0,1))
	EHIshort.set_widget(writingScale, (1,1), colspan = 2)
	# throwing Q
	EHIshort.set_widget(EHI_throwing, (0,2))
	EHIshort.set_widget(throwingScale, (1,2), colspan = 2)
	# toothbrush Q
	EHIshort.set_widget(EHI_toothbrush, (0,3))
	EHIshort.set_widget(toothbrushScale, (1,3), colspan = 2)
	# spoon Q
	EHIshort.set_widget(EHI_spoon, (0,4))
	EHIshort.set_widget(spoonScale, (1,4), colspan = 2)
	
	#Next
	EHIshort.set_widget(nextButton, (2,5))
	
	EHIshort._exec()
	__end__
	___prepare__
	__end__

define sketchpad blank
	set duration 150
	set description "Displays stimuli"

define sketchpad blank_1
	set duration 150
	set description "Displays stimuli"

define form_multiple_choice centre_mouse
	set timeout infinite
	set spacing 10
	set question ""
	set options "Click me"
	set margins "50;50;50;50"
	set form_var response
	set form_title "Form title"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define sketchpad click_here
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Click the dot" x=0 y=450 z_index=0
	draw fixdot color=white show_if=always style=default x=0 y=400 z_index=0

define loop experiment_loop
	set source_file "line-bisection_stim.csv"
	set source file
	set repeat 25
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run line_bisection

define inline_script experiment_script
	set description "Executes Python code"
	set _run ""
	___prepare__
	## preparing for the experiment
	# calculate mm per pixel based on debit card actual length + pixels of line from this 
	# screen width & height- as defined by participant in form
	var.pix_permm = var.card_pix/var.card_mm #x resolution divided by widthx10
	
	# start-point of the line
	var.left_pix = var.pix_permm*var.left_mm
	var.right_pix = var.pix_permm*var.right_mm
	var.y_pix = var.pix_permm*var.line_y_pos
	
	# get line length in pixels for later calc
	var.linelength_pix = var.linelength_mm*var.pix_permm
	
	var.line_pres_time = clock.time() - t0
	
	#set void trial back to 0
	var.void_trial = 0
	__end__

define sequence experiment_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run line_bisection_intro always
	run practice_loop always
	run experiment_start always
	run experiment_loop always

define sketchpad experiment_start
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="The practice is now over<br /><br />To start line bisection task, press SPACE" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="" x=-32 y=-32 z_index=0

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define inline_script global_prep
	set description "Executes Python code"
	___run__
	import csv
	from datetime import datetime
	from enum import Enum
	
	from libopensesame import sketchpad_elements
	from openexp.keyboard import keyboard
	
	# packages useful for generating random arrays and selecting from them
	# handing for varying target onset time
	import random
	from random import choice
	import numpy as np
	
	import math
	
	m = Mouse()
	myKeys = keyboard(exp, keylist=['space','left','right','return'])
	
	#beep = items['beep']
	#blank = items['blank']
	
	#response items
	stim, response = items['line'], items['line_mouse_response']
	#fixation = items['fixation']
	
	# defining bounding box for target response
	def in_bounds(x,y,bounds):
		left, top, right, bottom = bounds
		return x > left and x < right and y > top and y < bottom
	
	# screen measurement variables that need defining
	var.breaking_variable = False
	# line location
	var.screen_test_x1 = -450
	var.screen_test_x2 = 0
	var.card_mm = 86 #for finding mm per pix
	
	t0 = clock.time()
	
	# recording log file specfic to experiment
	subject_nr_string = str(var.subject_nr)
	date_str = datetime.now().isoformat()[:-7]
	#data_path = u'/home/experimenter/DMT-AD/DMT2019_rawdata/'
	data_string = u'subject{sub}_{title}_{date}.csv'
	#individual subject path
	#data_dir = os.path.join(data_path,subject_nr_string)
	#if not os.path.exists(data_dir):
			#os.makedirs(data_dir)
	#datafile = format(sub=subject_nr_string, date=date_str, title=var.title)
	
	# target onset time array
	#target_onset_values = list(np.arange(250,850,100))
	
	#manual trial counter for limiting experiment to max 50 trials
	#var.valid_trial_count = 0
	__end__
	set _prepare ""

define inline_script invalid_trial_check
	set description "Executes Python code"
	___run__
	#marking voided trial when they click outside bounds of line
	if self.get('cursor_y') > (var.pix_permm*10):
		var.void_trial = 1
	
	if self.get('cursor_y') < (var.pix_permm*-10):
		var.void_trial = 1
		
	if self.get('cursor_x') < (var.left_pix):
		var.void_trial = 1
		
	if self.get('cursor_x') > (var.right_pix):
		var.void_trial = 1
	
	var.practice = 0
	__end__
	set _prepare ""

define inline_script invalid_trial_check_1
	set description "Executes Python code"
	___run__
	#marking voided trial when they click outside bounds of line
	if self.get('cursor_y') > (var.pix_permm*10):
		var.void_trial = 1
	
	if self.get('cursor_y') < (var.pix_permm*-10):
		var.void_trial = 1
		
	if self.get('cursor_x') < (var.left_pix):
		var.void_trial = 1
		
	if self.get('cursor_x') > (var.right_pix):
		var.void_trial = 1
	
	var.practice = 1
	__end__
	set _prepare ""

define sketchpad line
	set duration 0
	set description "Displays stimuli"
	draw line color=white penwidth=5 show_if=always x1="[left_pix]" x2="[right_pix]" y1="[y_pix]" y2="[y_pix]" z_index=0

define sketchpad line_1
	set duration 0
	set description "Displays stimuli"
	draw line color=white penwidth=5 show_if=always x1="[left_pix]" x2="[right_pix]" y1="[y_pix]" y2="[y_pix]" z_index=0

define logger line_bisect_logger
	set description "Logs experimental data"
	set auto_log no
	log avg_rt
	log card_mm
	log card_pix
	log count_line_bisection
	log bisect_x
	log bisect_y
	log datetime
	log left_mm
	log left_pix
	log right_mm
	log right_pix
	log line
	log linelength_mm
	log line_response_time
	log line_y_pos
	log mouse_pos
	log pix_permm
	log void_trial
	log linelength_pix
	log subject_nr
	log EHI_writing
	log EHI_throwing
	log EHI_toothbrush
	log EHI_spoon
	log practice

define logger line_bisect_logger_1
	set description "Logs experimental data"
	set auto_log no
	log avg_rt
	log card_mm
	log card_pix
	log count_line_bisection
	log bisect_x
	log bisect_y
	log datetime
	log left_mm
	log left_pix
	log right_mm
	log right_pix
	log line
	log linelength_mm
	log line_response_time
	log line_y_pos
	log mouse_pos
	log pix_permm
	log void_trial
	log linelength_pix
	log subject_nr
	log EHI_writing
	log EHI_throwing
	log EHI_toothbrush
	log EHI_spoon

define sequence line_bisection
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run experiment_script always
	run line always
	run line_mouse_response always
	run blank always
	run mouse_response_reset always
	run invalid_trial_check always
	run line_bisect_logger always
	run repeat_invalid always

define sketchpad line_bisection_intro
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="<br /><br />In this next part of the experiment you will see a line.<br /><br />Your task is to click the MIDDLE of the line. <br /><br />Please notw we are interested in how you perceive the mid-point of the line, <br />so please DO NOT use any additional tools.<br /><br />If you do not click on or near the line, the trial will be repeated.<br /><br />You will first be given some practice trials to get you used to the task." x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=yes font_family=mono font_italic=no font_size=32 html=yes show_if=always text="LINE BISECTION TASK" x=0 y=-384 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="" x=-64 y=-384 z_index=0
	draw textline center=1 color=white font_bold=yes font_family=mono font_italic=no font_size=32 html=yes show_if=always text="When you are ready, press SPACE" x=0 y=352 z_index=0

define sequence line_bisection_prac
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run prac_script always
	run line_1 always
	run line_mouse_response_1 always
	run blank_1 always
	run mouse_response_reset_1 always
	run invalid_trial_check_1 always
	run repeat_invalid_1 always

define mouse_response line_mouse_response
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad line
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"
	set allowed_responses left_button

define mouse_response line_mouse_response_1
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad line_1
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"
	set allowed_responses left_button

define sequence main
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run outside_loop always

define inline_script mouse_response_reset
	set description "Executes Python code"
	___run__
	
	#get mouse response location
	(x,y),time = m.get_pos()
	var.bisect_x = x
	var.bisect_y = y
	var.line_end_time = time - t0
	
	# get response time, just incase
	var.line_response_time = var.line_end_time - var.line_pres_time
	
	# randomly setting mouse position between -15 and +15mm
	mouse_pos_list = list(np.arange((var.pix_permm*-15),(var.pix_permm*15),10))
	var.mouse_pos = random.choice(mouse_pos_list)
	m.set_pos(pos=(var.mouse_pos,var.pix_permm*50))
	__end__
	set _prepare ""

define inline_script mouse_response_reset_1
	set description "Executes Python code"
	___run__
	
	#get mouse response location
	(x,y),time = m.get_pos()
	var.bisect_x = x
	var.bisect_y = y
	var.line_end_time = time - t0
	
	# get response time, just incase
	var.line_response_time = var.line_end_time - var.line_pres_time
	
	# randomly setting mouse position between -15 and +15mm
	mouse_pos_list = list(np.arange((var.pix_permm*-15),(var.pix_permm*15),10))
	var.mouse_pos = random.choice(mouse_pos_list)
	m.set_pos(pos=(var.mouse_pos,var.pix_permm*50))
	__end__
	set _prepare ""

define form_multiple_choice new_form_multiple_choice
	set timeout infinite
	set spacing 10
	set question "Your question"
	__options__
	Yes
	No
	Maybe
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "Form title"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple yes
	set advance_immediately yes
	set _theme gray

define inline_javascript new_inline_javascript
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	screen_key, screen_time = myKeys.get_key()
	
	if screen_key == 'left':
		var.screen_test_x2 = var.screen_test_x2 - 5
		var.breaking_variable = False
		
	if screen_key == 'right':
		var.screen_test_x2 = var.screen_test_x2 + 5
		var.breaking_variable = False
		
	if screen_key == 'space':
		var.breaking_variable = True
		var.card_pix = var.screen_test_x2 - var.screen_test_x1
	__end__
	set _prepare ""

define inline_script new_inline_script
	set description "Executes Python code"
	___run__
	#### ALL IMPORTANT SCREEN RESOLUTION
	import pyautogui
	width_px, height_px = pyautogui.size()
	__end__
	set _prepare ""

define keyboard_response new_keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "left;right"

define loop new_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run EHI_shortform

define mouse_response new_mouse_response
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"

define mouse_response new_mouse_response_1
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad click_here
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"

define loop outside_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run outside_sequence

define sequence outside_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run global_prep always
	run screen_loop always
	run EHI_sequence always
	run experiment_sequence always

define inline_script prac_script
	set description "Executes Python code"
	set _run ""
	___prepare__
	## preparing for the experiment
	# calculate mm per pixel based on debit card actual length + pixels of line from this 
	# screen width & height- as defined by participant in form
	var.pix_permm = var.card_pix/var.card_mm #x resolution divided by widthx10
	
	# start-point of the line
	var.left_pix = var.pix_permm*var.left_mm
	var.right_pix = var.pix_permm*var.right_mm
	var.y_pix = var.pix_permm*var.line_y_pos
	
	# get line length in pixels for later calc
	var.linelength_pix = var.linelength_mm*var.pix_permm
	
	var.line_pres_time = clock.time() - t0
	
	#set void trial back to 0
	var.void_trial = 0
	__end__

define loop practice_loop
	set source_file "line-bisection_stim.csv"
	set source file
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run line_bisection_prac

define inline_script repeat_invalid
	set description "Executes Python code"
	___run__
	# repeat trial if click along the y-axis was over 2cm away from the line
	# forcing accuracy
	
	if self.get('cursor_y') > (var.pix_permm*10):
			# prepare trail sequence again
		exp.items['line_bisection'].prepare()
		# re-run trial sequence
		exp.items['line_bisection'].run()
		void_trial = 1
	
	if self.get('cursor_y') < (var.pix_permm*-10):
			# prepare trail sequence again
		exp.items['line_bisection'].prepare()
		# re-run trial sequence
		exp.items['line_bisection'].run()
		void_trial = 1
		
	if self.get('cursor_x') < (var.left_pix):
			# prepare trail sequence again
		exp.items['line_bisection'].prepare()
		# re-run trial sequence
		exp.items['line_bisection'].run()
		void_trial = 1
		
	if self.get('cursor_x') > (var.right_pix):
			# prepare trail sequence again
		exp.items['line_bisection'].prepare()
		# re-run trial sequence
		exp.items['line_bisection'].run()
		void_trial = 1
		
	else: 
		void_trial = 0
	__end__
	set _prepare ""

define inline_script repeat_invalid_1
	set description "Executes Python code"
	___run__
	# repeat trial if click along the y-axis was over 2cm away from the line
	# forcing accuracy
	
	if self.get('cursor_y') > (var.pix_permm*10):
			# prepare trail sequence again
		exp.items['line_bisection'].prepare()
		# re-run trial sequence
		exp.items['line_bisection'].run()
		void_trial = 1
	
	if self.get('cursor_y') < (var.pix_permm*-10):
			# prepare trail sequence again
		exp.items['line_bisection'].prepare()
		# re-run trial sequence
		exp.items['line_bisection'].run()
		void_trial = 1
		
	if self.get('cursor_x') < (var.left_pix):
			# prepare trail sequence again
		exp.items['line_bisection'].prepare()
		# re-run trial sequence
		exp.items['line_bisection'].run()
		void_trial = 1
		
	if self.get('cursor_x') > (var.right_pix):
			# prepare trail sequence again
		exp.items['line_bisection'].prepare()
		# re-run trial sequence
		exp.items['line_bisection'].run()
		void_trial = 1
		
	else: 
		void_trial = 0
	__end__
	set _prepare ""

define inline_script screen_info_script
	set description "Executes Python code"
	___run__
	__end__
	set _prepare ""

define sketchpad screen_instructions
	set duration keypress
	set description "Displays stimuli"

define loop screen_loop
	set source table
	set repeat 50
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[breaking_variable]='yes'"
	setcycle 0 empty_column ""
	run screen_sequence

define sketchpad screen_measurements
	set duration 0
	set description "Displays stimuli"
	draw line color=white penwidth=5 show_if=always x1="[screen_test_x1]" x2="[screen_test_x2]" y1=-200 y2=-200 z_index=0
	draw textline center=0 color=white font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text="Before the next task, we need to know the resolution of your screen.<br /><br />Place the long edge of a DEBIT/CREDIT card against the line. <br />Press the LEFT or RIGHT arrow keys to adjust length of the line until it is the same length as the debit/credit card<br /><br />Press 'SPACE' when done" x=-448 y=0 z_index=0

define sequence screen_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run screen_measurements always
	run new_inline_javascript always
	run screen_info_script always

define form_text_input screen_size_form
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var response
	set form_title "Screen size"
	__form_question__
	What is the height of your screen?
	
	What is the width of your screen?
	__end__
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="OpenSesame 3.3 <i>Lentiform Loewenfeld</i>" x=0 y=0 z_index=0

